<?php
include ($template_directory . 'template_xml.php');
?> 

Set_Use_Processed_Analog
/USE_PROCESSED=TRUE
;

Set_Use_Processed_Targets
/USE_PROCESSED=TRUE
;

Set_Use_Processed_Forces
/USE_PROCESSED=TRUE
;

Set_View_Processing_Results
! /VIEW_PROCESSING_RESULTS=1
/VIEW_BUILDMODEL_RESULTS=0
! /VIEW_RECALC_PIPELINE_WARNINGS=2
;

!=============================
!Open files
!=============================

<?
$functional_trial_exists = false;

// Load movement files and add tags.
foreach($measurements as $m) {
	$path_parts = pathinfo($m["Filename"]);

	if (strstr($m["Used"], "True") && strpos($subsession['Model_used'],'Theia') === false) {
		if (strpos($path_parts['filename'], 'Functional') !== false) {
			$tag = 'Functional';
			$functional_trial_exists = true;
?>
			File_Open 
			/FILE_NAME=<?=$working_directory . $path_parts['filename'] . ".c3d";?> 
			/SET_PROMPT=Open functional trial
			; 
			
			!Add tag to each file
			Assign_Tags_To_Files
			/MOTION_FILE_NAMES=<?=$working_directory . $path_parts['filename'] . ".c3d";?> 
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			/TAGS=<?=$tag;?> 
			; 
	<?
		}
		elseif (strpos($path_parts['filename'], 'Static') !== false) {
			$tag = 'Static';
?> 
			File_Open 
			/FILE_NAME=<?=$working_directory . $path_parts['filename'] . ".c3d";?> 
			/SET_PROMPT=Open static trial
			; 
			
			!Add tag to each file
			Assign_Tags_To_Files
			/MOTION_FILE_NAMES=<?=$working_directory . $path_parts['filename'] . ".c3d";?> 
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			/TAGS=<?=$tag;?> 
			; 
<? 
		}
	}
	
	if (strstr($m["Used"], "True") && strpos($subsession['Model_used'],'Theia') !== false) {
		$tag = 'Static';

		include ($v3dScriptDirectory . 'pipeline_open_files_Theia.v3s');
	}
}

if (strpos($subsession['Model_used'],'Theia') === false) {
?> 

	File_Rename
	/EXISTING_FILE_NAME=<?=$working_directory?>*Static*.c3d
	/NEW_FILE_NAME=Stand.c3d
	! /USE_SEARCH_REPLACE=FALSE
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	! /REMOVE_FILE_PATH=FALSE
	/RENAME_STATIC_CALIBRATION_FILES=TRUE
	;

	Create_Hybrid_Model
	/CALIBRATION_FILE=<?=$working_directory?>Static*.c3d
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	! /RANGE=ALL_FRAMES
	;
	
	! Remove prefix 'Q_' if Skeleton solver Sports marker set is used.
	Remove_Prefix_From_Point_Labels
	/PREFIX=Q_
	! /INCLUDE_CAL_FILE=TRUE
	! /OVERWRITE_C3D_FILE=FALSE
	;

	Conditional_Statement
	/ITERATION_PARAMETER_NAME=ifd_marker_set
	/EXPRESSION=(Data_Exists(TARGET::ORIGINAL::L_PM6) &::AMP& Data_Exists(TARGET::ORIGINAL::L_MCAL))
	! /AS_INTEGER=TRUE
	;

		Apply_Model_Template
		/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
		/MODEL_TEMPLATE=<?=$modelDirectory;?>model_IFD_Lowerbody.mdh
		! /SET_PROMPT=Open model file
		/VIEW_BUILDMODEL_RESULTS=0
		;

		Conditional_Statement
		/ITERATION_PARAMETER_NAME=cond
		/EXPRESSION=Data_Exists(TARGET::ORIGINAL::TV2)
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		;

			Append_Model_Template
			/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
			/MODEL_TEMPLATE=<?=$modelDirectory;?>Thorax_IFD.mdh
			/VIEW_BUILDMODEL_RESULTS=0
			;

		Conditional_Statement_End
		/ITERATION_PARAMETER_NAME=cond
		;

		Conditional_Statement
		/ITERATION_PARAMETER_NAME=cond
		/EXPRESSION=Data_Exists(TARGET::ORIGINAL::L_HLE)
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		;

			Append_Model_Template
			/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
			/MODEL_TEMPLATE=<?=$modelDirectory;?>Arms_IFD.mdh
			/VIEW_BUILDMODEL_RESULTS=0
			;

		Conditional_Statement_End
		/ITERATION_PARAMETER_NAME=cond
		;

		Conditional_Statement
		/ITERATION_PARAMETER_NAME=cond
		/EXPRESSION=Data_Exists(TARGET::ORIGINAL::L_HM2)
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		;

			Append_Model_Template
			/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
			/MODEL_TEMPLATE=<?=$modelDirectory;?>Hands.mdh
			/VIEW_BUILDMODEL_RESULTS=0
			;

		Conditional_Statement_End
		/ITERATION_PARAMETER_NAME=cond
		;

		Conditional_Statement
		/ITERATION_PARAMETER_NAME=cond
		/EXPRESSION=Data_Exists(TARGET::ORIGINAL::SGL)
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		;

			Append_Model_Template
			/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
			/MODEL_TEMPLATE=<?=$modelDirectory;?>Head.mdh
			/VIEW_BUILDMODEL_RESULTS=0
			;

		Conditional_Statement_End
		/ITERATION_PARAMETER_NAME=cond
		;

		Conditional_Statement
		/ITERATION_PARAMETER_NAME=cond
		/EXPRESSION=Data_Exists(TARGET::ORIGINAL::L_TLR)
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		;

			Append_Model_Template
			/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
			/MODEL_TEMPLATE=<?=$modelDirectory;?>Tibia_plateau.mdh
			/VIEW_BUILDMODEL_RESULTS=0
			;

		Conditional_Statement_End
		/ITERATION_PARAMETER_NAME=cond
		;

	Conditional_Statement_End
	/ITERATION_PARAMETER_NAME=ifd_marker_set
	;

	Conditional_Statement
	/ITERATION_PARAMETER_NAME=ben_hogan_marker_set
	/EXPRESSION=(Data_Exists(TARGET::ORIGINAL::L_LMal) &::AMP& Data_Exists(TARGET::ORIGINAL::L_1st))
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	;

		Apply_Model_Template
		/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
		/MODEL_TEMPLATE=<?=$modelDirectory;?>BenHogan.mdh
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		/VIEW_BUILDMODEL_RESULTS=0
		;

	Conditional_Statement_End
	/ITERATION_PARAMETER_NAME=ben_hogan_marker_set
	;

	Conditional_Statement
	/ITERATION_PARAMETER_NAME=meyer_marker_set
	/EXPRESSION=(Data_Exists(TARGET::ORIGINAL::LLAMA) &::AMP& Data_Exists(TARGET::ORIGINAL::LDIHE))
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	;

		Apply_Model_Template
		/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
		/MODEL_TEMPLATE=<?=$modelDirectory;?>Pelvis_Meyer.mdh
		/SET_PROMPT=Open model file - pelvis
		/VIEW_BUILDMODEL_RESULTS=0
		;
			
		Append_Model_Template
		/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
		/MODEL_TEMPLATE=<?=$modelDirectory;?>Lower_body_Meyer.mdh
		/SET_PROMPT=Open model file - lower body
		/VIEW_BUILDMODEL_RESULTS=0
		;
			
		Append_Model_Template
		/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
		/MODEL_TEMPLATE=<?=$modelDirectory;?>Upper_Body_Meyer.mdh
		/VIEW_BUILDMODEL_RESULTS=0
		;

	Conditional_Statement_End
	/ITERATION_PARAMETER_NAME=meyer_marker_set
	;

	Conditional_Statement
	/ITERATION_PARAMETER_NAME=sports_marker_set
	/EXPRESSION=Data_Exists(TARGET::ORIGINAL::WaistLFront)
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	;

		Conditional_Statement
		/ITERATION_PARAMETER_NAME=pelvis
		/EXPRESSION=(Data_Exists(TARGET::ORIGINAL::WaistL) <> 1)
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		;

			Apply_Model_Template
			/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
			/MODEL_TEMPLATE=<?=$modelDirectory;?>Pelvis.mdh
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			/VIEW_BUILDMODEL_RESULTS=0
			;
			
		Conditional_Statement_End
		/ITERATION_PARAMETER_NAME=pelvis
		;
		
		Conditional_Statement
		/ITERATION_PARAMETER_NAME=pelvis
		/EXPRESSION=Data_Exists(TARGET::ORIGINAL::WaistL)
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		;

			Apply_Model_Template
			/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
			/MODEL_TEMPLATE=<?=$modelDirectory;?>Pelvis_IC.mdh
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			/VIEW_BUILDMODEL_RESULTS=0
			;
			
		Conditional_Statement_End
		/ITERATION_PARAMETER_NAME=pelvis
		;
		
		<? if ($functional_trial_exists) {
		?> 
			Append_Model_Template
			/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
			/MODEL_TEMPLATE=<?=$modelDirectory;?>Lower_Body_sports.mdh
			/VIEW_BUILDMODEL_RESULTS=0
			;
		<?
		}
		else {
		?> 
			Select_Active_File
			/FILE_NAME=Static
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			;
			
			! check if L/RKneeIn target exists
			Conditional_Statement
			/ITERATION_PARAMETER_NAME=KneeIn
			/EXPRESSION=Data_Exists(TARGET::ORIGINAL::LKneeIn) | Data_Exists(TARGET::ORIGINAL::RKneeIn)
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			;
			
				! if yes, add model using medial knee markers
				Append_Model_Template
				/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
				/MODEL_TEMPLATE=<?=$modelDirectory;?>Lower_Body_sports_wo_FKnee.mdh
				/VIEW_BUILDMODEL_RESULTS=0
				;
				
			Conditional_Statement_End
			/ITERATION_PARAMETER_NAME=KneeIn
			;
			
			!else halt the script
			Conditional_Statement
			/ITERATION_PARAMETER_NAME=KneeIn
			/EXPRESSION=(Data_Exists(TARGET::ORIGINAL::LKneeIn) | Data_Exists(TARGET::ORIGINAL::RKneeIn)) <> 1
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			;
			
				Pipeline_Breakpoint
				/PAUSE_MESSAGE=Model cannot be created because functional trial is not selected and at the same time medial knee markers (LKneeIn and RKneeIn) were not found in static trial. Please halt the execution. Either activate functional trial or add medial knee markers to static trial.
				;
				
			Conditional_Statement_End
			/ITERATION_PARAMETER_NAME=KneeIn
			;
		<?
		}?> 
		
		Conditional_Statement
		/ITERATION_PARAMETER_NAME=cond
		/EXPRESSION=Data_Exists(TARGET::ORIGINAL::SpineThoracic12)
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		;

			Append_Model_Template
			/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
			/MODEL_TEMPLATE=<?=$modelDirectory;?>Upper_Body_sports.mdh
			/VIEW_BUILDMODEL_RESULTS=0
			;

		Conditional_Statement_End
		/ITERATION_PARAMETER_NAME=cond
		;

	Conditional_Statement_End
	/ITERATION_PARAMETER_NAME=sports_marker_set
	;

	<? 	
	if ($inertia_model == 2) {
		if (strpos($subject['Sex'], 'Female') !== false) 
			include ($template_directory . 'Assets\Models\model_Zatsiorsky_female.v3s');
		else
			include ($template_directory . 'Assets\Models\model_Zatsiorsky_male.v3s');
	}
	?> 

	! Skip for Ben Hogan
	Conditional_Statement
	/ITERATION_PARAMETER_NAME=cond
	/EXPRESSION=((Data_Exists(TARGET::ORIGINAL::L_LMal) &::AMP& Data_Exists(TARGET::ORIGINAL::L_1st)) <> 1)
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	;
	
		!Try funcional knee only if Functional trial exists
		Set_Pipeline_Parameter_To_List_Of_Tags
		/PARAMETER_NAME=all_tags
		;

		For_Each
		/ITERATION_PARAMETER_NAME=tag_name
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		/ITEMS=::all_tags
		;

			Conditional_Statement
			/ITERATION_PARAMETER_NAME=cond1
			/EXPRESSION=("&::tag_name&" = "Functional")
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			;
			
				Associate_Functional_Joints_With_Files
				/CALIBRATION_FILE=<?=$working_directory;?>Static*.c3d
				/FILE_NAME=Functional
				/LANDMARKS=F_RKNEE+F_LKNEE
				/START_FRAME=1+1
				/END_FRAME=EOF
				/COMPUTE_LANDMARK=TRUE
				;
				
			Conditional_Statement_End
			/ITERATION_PARAMETER_NAME=cond1
			;

		End_For_Each
		/ITERATION_PARAMETER_NAME=tag_name
		;

	Conditional_Statement_End
	/ITERATION_PARAMETER_NAME=cond
	;

	Set_Subject_Height
	/CALIBRATION_FILE=*Static*.c3d
	/HEIGHT=<?=$session["Height"];?> 
	! /UNITS=m
	;

	Set_Subject_Weight
	/CALIBRATION_FILE=*Static*.c3d
	/WEIGHT=<?=$session["Weight"];?> 
	! /UNITS=Kg
	;

	Assign_Model_File
	/CALIBRATION_FILE=*Static*.c3d
	/MOTION_FILE_NAMES=ALL_FILES
	! /REMOVE_EXISTING_ASSIGNMENTS=FALSE
	;

<?
	include ($v3dScriptDirectory . 'pipeline_virtual_lab.v3s');
}?> 

File_Save_As
/FILE_NAME=<?=$cmo_file?> 
! /SET_PROMPT=Save CMO file as
! /SAVE_EMBEDDED_GRAPHICS=FALSE
;
