! +++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++
!  Copyright notice
!  This PAF and its content is copyright of Qualisys AB © 2012-2024. All rights reserved. 
!  The PAF script is only to be used in conjunction with a Qualisys Motion Capture System. 
!  Only legal PAF owners are entitled to use the script and only in relation with related PAF.
! +++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++++

<?php
//check if cmz exists, if not try to open cmo
$cmz_wo_suffix = str_replace('_exp','',$cmo_file);
$cmo_wo_suffix = str_replace('.cmz','.cmo',$cmz_wo_suffix);

if (file_exists($cmz_wo_suffix))
	$cm_wo_suffix = $cmz_wo_suffix;
else
	$cm_wo_suffix = $cmo_wo_suffix;

//check if analog data is present (we assume that force data exists if there is analog data in dynamic files)
$includes_force = false;
foreach($measurements as $m) {
	if(strpos($session['Event_mode'], 'Force Plates') !== false && ($m["Used"] === "True") && strstr($m["Measurement_type"], "Dynamic") && (is_array($m["Channels"])) && (!empty($m["Channels"])))
		$includes_force = true;
}

if (!isset($is_second_part)) {
?> 

	File_Open 
	/FILE_NAME=<?=$cm_wo_suffix;?> 
	;

<?
}?> 

!Find out which maker set is used
Conditional_Statement
/ITERATION_PARAMETER_NAME=sport
/EXPRESSION=(Data_Exists(TARGET::ORIGINAL::LAnkleOut) = 1)
! /AS_INTEGER=TRUE
;

	Set_Pipeline_Parameter
	/PARAMETER_NAME=markerset_used
	/PARAMETER_VALUE=sports
	;

Conditional_Statement_End
/ITERATION_PARAMETER_NAME=sport
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=meyer_marker_set
/EXPRESSION=Data_Exists(TARGET::ORIGINAL::LDIHE)
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;

	Set_Pipeline_Parameter
	/PARAMETER_NAME=markerset_used
	/PARAMETER_VALUE=meyer
	;

Conditional_Statement_End
/ITERATION_PARAMETER_NAME=meyer_marker_set
;

!Prepare export for web report
Select_Active_File
/FILE_NAME=ALL_FILES
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;

Evaluate_Expression
/EXPRESSION=PARAMETERS::POINT::RATE
/RESULT_TYPES=METRIC
! /RESULT_FOLDERS=PROCESSED
/RESULT_NAME=Frame_rate
! /APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
;

Conditional_Statement
/ITERATION_PARAMETER_NAME=cond
/EXPRESSION=Data_Exists(PARAMETERS::ANALOG::RATE)
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;

	Evaluate_Expression
	/EXPRESSION=PARAMETERS::ANALOG::RATE
	/RESULT_TYPES=METRIC
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	/RESULT_NAME=Analog_rate
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	;

Conditional_Statement_End
/ITERATION_PARAMETER_NAME=cond
;

!Prepare what to export to web
!================================
Set_Pipeline_Parameter_To_List_Of_Signal_Names
/PARAMETER_NAME=metric_names
/SIGNAL_TYPES=METRIC
/SIGNAL_FOLDER=PROCESSED
;

Get_Pipeline_Parameter_Count
/PARAMETER_NAME=metrics_count
/PARAMETER_VALUE=::metric_names
;

Set_Pipeline_Parameter
/PARAMETER_NAME=metric_types
/PARAMETER_VALUE=METRIC
;

Set_Pipeline_Parameter
/PARAMETER_NAME=metric_folders
/PARAMETER_VALUE=PROCESSED
;

Set_Pipeline_Parameter_From_For_Loop
/PARAMETER_NAME=count
/PARAMETER_INDEX_START=1
/PARAMETER_INDEX_END=&::metrics_count& - 1
/PARAMETER_INDEX_STEP=1
! /PARAMETER_INDEX_TYPE=INTEGER
;

For_Each
/ITERATION_PARAMETER_NAME=loop
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/ITEMS=::count
;

	Set_Pipeline_Parameter
	/PARAMETER_NAME=metric_types
	/PARAMETER_VALUE=&::metric_types& + METRIC
	;

	Set_Pipeline_Parameter
	/PARAMETER_NAME=metric_folders
	/PARAMETER_VALUE=&::metric_folders& + PROCESSED
	;

End_For_Each
/ITERATION_PARAMETER_NAME=loop
;

<?
if ($includes_noraxon || $includes_mega_me6000 || $includes_delsys_trigno || $includes_myon || $includes_analog_EMG) {
?> 
	Set_Pipeline_Parameter_To_List_Of_Signal_Names
	/PARAMETER_NAME=emg_names
	/SIGNAL_TYPES=ANALOG
	/SIGNAL_FOLDER=EMG_RAW_web
	;

	Get_Pipeline_Parameter_Count
	/PARAMETER_NAME=emg_count
	/PARAMETER_VALUE=::emg_names
	;

	Set_Pipeline_Parameter
	/PARAMETER_NAME=emg_types
	/PARAMETER_VALUE=ANALOG
	;

	Set_Pipeline_Parameter
	/PARAMETER_NAME=emg_folders
	/PARAMETER_VALUE=EMG_RAW_web
	;

	Set_Pipeline_Parameter_From_For_Loop
	/PARAMETER_NAME=count
	/PARAMETER_INDEX_START=1
	/PARAMETER_INDEX_END=&::emg_count& - 1
	/PARAMETER_INDEX_STEP=1
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	;

	For_Each
	/ITERATION_PARAMETER_NAME=loop
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	/ITEMS=&::count
	;

		Set_Pipeline_Parameter
		/PARAMETER_NAME=emg_types
		/PARAMETER_VALUE=&::emg_types& + ANALOG
		;

		Set_Pipeline_Parameter
		/PARAMETER_NAME=emg_folders
		/PARAMETER_VALUE=&::emg_folders& + EMG_RAW_web
		;

	End_For_Each
	/ITERATION_PARAMETER_NAME=loop
	;
<?
}

$events = array('LeftPlotEnd', 'LeftPlotStart', 'RightPlotEnd', 'RightPlotStart', 'LeftPlotEndForce', 'LeftPlotStartForce', 'RightPlotEndForce', 'RightPlotStartForce', 'Left_On_Left_FP', 'Left_On_Right_FP', 'Right_On_Left_FP', 'Right_On_Right_FP', 'Left Penultimate TouchDown', 'Left Penultimate TakeOff', 'Right Penultimate TouchDown', 'Right Penultimate TakeOff', 'BOF', 'EOF', 'Measurement_end', 'TouchDown40ms');

$link_models_kinematics = array('Left Ankle Angles', 'Left Elbow Angles', 'Left Foot Pitch Angles', 'Left Foot Progression', 'Left Hip Angles', 'Left Knee Angles', 'Left Pelvic Angles', 'Left Shoulder Angles', 'Left Thorax Angles', 'Left Thorax_Lab Angles', 'Left Shoulder Ang Vel', 'Right Ankle Angles', 'Right Elbow Angles', 'Right Foot Pitch Angles', 'Right Foot Progression', 'Right Hip Angles', 'Right Knee Angles', 'Right Pelvic Angles', 'Right Shoulder Angles', 'Right Thorax Angles', 'Right Thorax_Lab Angles', 'Right Shoulder Ang Vel');
$link_models_kinetics = array('Left Ankle Moment', 'Left Ankle Power', 'Left GRF', 'Left Hip Moment', 'Left Hip Power', 'Left Knee Moment', 'Left Knee Power', 'Right Ankle Moment', 'Right Ankle Power', 'Right GRF', 'Right Hip Moment', 'Right Hip Power', 'Right Knee Moment', 'Right Knee Power');

if ($includes_force)
	$link_models = array_merge($link_models_kinematics, $link_models_kinetics);
else
	$link_models = $link_models_kinematics;

$tsp = array('Cycle_Time', 'Left_Cycle_Time', 'Left_Stance_Time', 'Left_Step_Length', 'Left_Step_Time', 'Left_Stride_Length', 'Left_Swing_Time', 'Right_Cycle_Time', 'Right_Stance_Time', 'Right_Step_Length', 'Right_Step_Time', 'Right_Stride_Length', 'Right_Swing_Time', 'Speed', 'Statures_Per_Second', 'Stride_Length', 'Stride_Width');
$derived = array('Left_COP_COM_distance', 'Right_COP_COM_distance', 'Left_Ankle_COM_distance', 'Left_Knee_COM_distance', 'Right_Ankle_COM_distance', 'Right_Knee_COM_distance', 'Left_RFD', 'Right_RFD', 'COP_zeroed');
$force = array('Left_Force_filt', 'Right_Force_filt');

$event_names = implode('+', $events);
$link_model_names = implode('+', $link_models);
$tsp_names = implode('+', $tsp);
$derived_names = implode('+', $derived);
$force_names = implode('+', $force);

foreach ($events as $ev) {
	$event_types .= 'EVENT_LABEL+';
	$event_folders .= 'ORIGINAL+';
}

foreach ($link_models as $l) {
	$link_model_types .= 'LINK_MODEL_BASED+';

	if (strpos($l, 'Shoulder Angles') !== false)
		$link_model_folders .= 'PROCESSED+';
	else
		$link_model_folders .= 'ORIGINAL+';
}

foreach ($tsp as $t) {
	$tsp_types .= 'METRIC+';
	$tsp_folders .= 'TEMPORAL_DISTANCE+';
}

foreach ($derived as $f) {
	$derived_types .= 'DERIVED+';
	$derived_folders .= 'PROCESSED+';
}

foreach ($force as $d) {
	$force_types .= 'FORCE+';
	$force_folders .= 'PROCESSED+';
}
?>

Export_Data_To_Ascii_File
/SIGNAL_TYPES=<?=$event_types;?><?=$tsp_types;?>&::metric_types&+<?=$link_model_types;?><?=$derived_types;?><?=$force_types;?>&::emg_types&
/SIGNAL_FOLDER=<?=$event_folders;?><?=$tsp_folders;?>&::metric_folders&+<?=$link_model_folders;?><?=$derived_folders;?><?=$force_folders;?>&::emg_folders&
/SIGNAL_NAMES=<?=$event_names;?>+<?=$tsp_names;?>+&::metric_names&+<?=$link_model_names;?>+<?=$derived_names;?>+<?=$force_names;?>+&::emg_names&
/FILE_NAME=<?=$working_directory;?>session_data.xml
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/COMPONENT_SEQUENCE=ALL
! /SIGNAL_PRECISION=4
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! /USE_POINT_RATE=FALSE
! /NORMALIZE_DATA=FALSE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /USE_P2D_FORMAT=FALSE
/USE_XML_FORMAT=TRUE
/USE_SHORT_FILENAME=TRUE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
/USE_SCIENTIFIC_NOTATION=TRUE
;

!=========================
! Export to 3D viewer
!=========================
! Export each trial in separate .xml
Select_Active_File
/FILE_NAME=ALL_FILES
/QUERY=NOT (Static)
;

Set_Pipeline_Parameter_To_List_Of_Tagged_Files
/PARAMETER_NAME=files
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/GET_CURRENT_SELECTED_FILES=TRUE
! /USE_SHORT_FILENAMES=false
;

For_Each
/ITERATION_PARAMETER_NAME=file
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/ITEMS=::files
;

	Select_Active_File
	/FILE_NAME=::file
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	;

	! Segment length in [mm]
	!---------------------------
	Evaluate_Expression
	/EXPRESSION=MODEL::SEGMENT::LAR::LENGTH * 1000
	/RESULT_NAME=LArm
	/RESULT_TYPE=METRIC
	/RESULT_FOLDER=SEG_LENGTH
	;

	Evaluate_Expression
	/EXPRESSION=MODEL::SEGMENT::LFA::LENGTH * 1000
	/RESULT_NAME=LForearm
	/RESULT_TYPE=METRIC
	/RESULT_FOLDER=SEG_LENGTH
	;

	Expression_Loop
	/ITERATION_PARAMETER_NAME=loop
	! do not use Data_Exists as empty segment returns true
	/EXPRESSION=(isnan(mean(KINETIC_KINEMATIC::LHA::CGPos::X)) = 0) ! only empty signal is zero
	/AS_INTEGER=TRUE
	;

		Evaluate_Expression
		/EXPRESSION=METRIC::PROCESSED::HEIGHT * 1000 * 0.106 * 0.58 ! Based on Winter 2009 (hand length) and McConville 1981 (3rd metatarsal length relative to the hand length)
		/RESULT_NAME=LHand
		/RESULT_TYPE=METRIC
		/RESULT_FOLDER=SEG_LENGTH
		;

	Expression_Loop_End
	/ITERATION_PARAMETER_NAME=loop
	;

	Evaluate_Expression
	/EXPRESSION=MODEL::SEGMENT::LFT::LENGTH * 1000 * 1.25 ! multiplied by 1.25 to better represent actual segment size
	/RESULT_NAME=LFoot
	/RESULT_TYPE=METRIC
	/RESULT_FOLDER=SEG_LENGTH
	;

	Evaluate_Expression
	/EXPRESSION=MODEL::SEGMENT::LSK::LENGTH * 1000
	/RESULT_NAME=LLeg
	/RESULT_TYPE=METRIC
	/RESULT_FOLDER=SEG_LENGTH
	;

	Evaluate_Expression
	/EXPRESSION=MODEL::SEGMENT::LTH::LENGTH * 1000
	/RESULT_NAME=LThigh
	/RESULT_TYPE=METRIC
	/RESULT_FOLDER=SEG_LENGTH
	;

	Evaluate_Expression
	/EXPRESSION=MODEL::SEGMENT::RAR::LENGTH * 1000
	/RESULT_NAME=RArm
	/RESULT_TYPE=METRIC
	/RESULT_FOLDER=SEG_LENGTH
	;

	Evaluate_Expression
	/EXPRESSION=MODEL::SEGMENT::RFA::LENGTH * 1000
	/RESULT_NAME=RForearm
	/RESULT_TYPE=METRIC
	/RESULT_FOLDER=SEG_LENGTH
	;

	Expression_Loop
	/ITERATION_PARAMETER_NAME=loop
	! do not use Data_Exists as empty segment returns true
	/EXPRESSION=(isnan(mean(KINETIC_KINEMATIC::RHA::CGPos::X)) = 0) ! only empty signal is zero
	/AS_INTEGER=TRUE
	;

		Evaluate_Expression
		/EXPRESSION=METRIC::PROCESSED::HEIGHT * 1000 * 0.106 * 0.58 ! Based on Winter 2009 (hand length) and McConville 1981 (3rd metatarsal length relative to the hand length)
		/RESULT_NAME=RHand
		/RESULT_TYPE=METRIC
		/RESULT_FOLDER=SEG_LENGTH
		;

	Expression_Loop_End
	/ITERATION_PARAMETER_NAME=loop
	;

	Evaluate_Expression
	/EXPRESSION=MODEL::SEGMENT::RFT::LENGTH * 1000 * 1.25 ! multiplied by 1.25 to better represent actual segment size
	/RESULT_NAME=RFoot
	/RESULT_TYPE=METRIC
	/RESULT_FOLDER=SEG_LENGTH
	;

	Evaluate_Expression
	/EXPRESSION=MODEL::SEGMENT::RSK::LENGTH * 1000
	/RESULT_NAME=RLeg
	/RESULT_TYPE=METRIC
	/RESULT_FOLDER=SEG_LENGTH
	;

	Evaluate_Expression
	/EXPRESSION=MODEL::SEGMENT::RTH::LENGTH * 1000
	/RESULT_NAME=RThigh
	/RESULT_TYPE=METRIC
	/RESULT_FOLDER=SEG_LENGTH
	;

	Evaluate_Expression
	/EXPRESSION=MODEL::METRIC::ASIS_Distance * 1000
	/RESULT_NAME=Pelvis
	/RESULT_TYPE=METRIC
	/RESULT_FOLDER=SEG_LENGTH
	;

	Evaluate_Expression
	/EXPRESSION=MODEL::METRIC::RTA_Distal_Radius * 2.5 * 1000
	/RESULT_NAME=Thorax
	/RESULT_TYPE=METRIC
	/RESULT_FOLDER=SEG_LENGTH
	;

	Evaluate_Expression
	/EXPRESSION=MODEL::SEGMENT::RHE::LENGTH * 1000 * 4 !multiplied by 3 to to better represent actual segment size
	/RESULT_NAME=Head
	/RESULT_TYPE=METRIC
	/RESULT_FOLDER=SEG_LENGTH
	;

	Conditional_Statement
	/ITERATION_PARAMETER_NAME=cond
	/EXPRESSION=Data_Exists(TARGET::ORIGINAL::SGL) !IFD markerset
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	;

		Evaluate_Expression
		/EXPRESSION=MODEL::SEGMENT::RHE::LENGTH * 1000 * 1.6 ! multiplied by 1.6 to to better represent actual segment size
		/RESULT_NAME=Head
		/RESULT_TYPE=METRIC
		/RESULT_FOLDER=SEG_LENGTH
		;

	Conditional_Statement_End
	/ITERATION_PARAMETER_NAME=cond
	;

	Conditional_Statement
	/ITERATION_PARAMETER_NAME=cond
	/EXPRESSION=("<?=$model_used;?>" = "Theia")
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	;

		Evaluate_Expression
		/EXPRESSION=MODEL::METRIC::RPV_Proximal_Radius * 1000 * 1.3
		/RESULT_NAME=Pelvis
		/RESULT_TYPE=METRIC
		/RESULT_FOLDER=SEG_LENGTH
		;

		Evaluate_Expression
		/EXPRESSION=MODEL::METRIC::RTA_Distal_Radius * 1.5 * 1000
		/RESULT_NAME=Thorax
		/RESULT_TYPE=METRIC
		/RESULT_FOLDER=SEG_LENGTH
		;

		Evaluate_Expression
		/EXPRESSION=MODEL::SEGMENT::RHE::LENGTH * 1000 * 1.8 !multiplied by 1.8 to to better represent actual segment size
		/RESULT_NAME=Head
		/RESULT_TYPE=METRIC
		/RESULT_FOLDER=SEG_LENGTH
		;

	Conditional_Statement_End
	/ITERATION_PARAMETER_NAME=cond
	;

	Conditional_Statement
	/ITERATION_PARAMETER_NAME=cond
	/EXPRESSION=("&::markerset_used&" = "sports") | ("&::markerset_used&" = "meyer")
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	;

		Evaluate_Expression
		/EXPRESSION=mean(distance(LANDMARK::ORIGINAL::trunk_cran,TARGET::ORIGINAL::HeadFront) * 1000)
		/RESULT_NAME=Head
		/RESULT_TYPE=METRIC
		/RESULT_FOLDER=SEG_LENGTH
		;

	Conditional_Statement_End
	/ITERATION_PARAMETER_NAME=cond
	;

	! segment position in [mm]
	!---------------------------
	! define vector to adjust pelvis AP position for Theia

	! No pelvis shift by default
	Metric_Explicit
	/RESULT_METRIC_FOLDER=VIRTUAL_LAB
	/RESULT_METRIC_NAME=theia_pelvis_shift
	/METRIC_VALUE=vector(0,0,0)
	;

	Conditional_Statement
	/ITERATION_PARAMETER_NAME=theia
	/EXPRESSION=("<?=$model_used;?>" = "Theia")
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	;

		Conditional_Statement
		/ITERATION_PARAMETER_NAME=cond
		/EXPRESSION=(METRIC::VIRTUAL_LAB::LAB_LATERAL::Y > 0) ! -X direction
		/AS_INTEGER=TRUE
		;

			Metric_Explicit
			/RESULT_METRIC_FOLDER=VIRTUAL_LAB
			/RESULT_METRIC_NAME=theia_pelvis_shift
			/METRIC_VALUE=vector(-70,0,0)
			;
			
		Conditional_Statement_End
		/ITERATION_PARAMETER_NAME=cond
		;

		Conditional_Statement
		/ITERATION_PARAMETER_NAME=cond
		/EXPRESSION=(METRIC::VIRTUAL_LAB::LAB_LATERAL::Y < 0) ! +X direction
		/AS_INTEGER=TRUE
		;

			Metric_Explicit
			/RESULT_METRIC_FOLDER=VIRTUAL_LAB
			/RESULT_METRIC_NAME=theia_pelvis_shift
			/METRIC_VALUE=vector(70,0,0)
			;
			
		Conditional_Statement_End
		/ITERATION_PARAMETER_NAME=cond
		;

		Conditional_Statement
		/ITERATION_PARAMETER_NAME=cond
		/EXPRESSION=(METRIC::VIRTUAL_LAB::LAB_LATERAL::X < 0) ! -Y direction
		/AS_INTEGER=TRUE
		;

			Metric_Explicit
			/RESULT_METRIC_FOLDER=VIRTUAL_LAB
			/RESULT_METRIC_NAME=theia_pelvis_shift
			/METRIC_VALUE=vector(0,-70,0)
			;
			
		Conditional_Statement_End
		/ITERATION_PARAMETER_NAME=cond
		;

		Conditional_Statement
		/ITERATION_PARAMETER_NAME=cond
		/EXPRESSION=(METRIC::VIRTUAL_LAB::LAB_LATERAL::X > 0) ! +Y direction
		/AS_INTEGER=TRUE
		;

			Metric_Explicit
			/RESULT_METRIC_FOLDER=VIRTUAL_LAB
			/RESULT_METRIC_NAME=theia_pelvis_shift
			/METRIC_VALUE=vector(0,70,0)
			;
			
		Conditional_Statement_End
		/ITERATION_PARAMETER_NAME=cond
		;

	Conditional_Statement_End
	/ITERATION_PARAMETER_NAME=theia
	;

	Evaluate_Expression
	/EXPRESSION=LINK_MODEL_BASED::ORIGINAL::PelvisPos * 1000 - METRIC::VIRTUAL_LAB::theia_pelvis_shift !shift pelvis posterior
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=Pelvis
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	;

	Evaluate_Expression
	/EXPRESSION=LANDMARK::ORIGINAL::L_HIP * 1000
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=LHip
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	;

	Evaluate_Expression
	/EXPRESSION=LANDMARK::ORIGINAL::R_HIP * 1000
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=RHip
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	;

	Evaluate_Expression
	/EXPRESSION=LANDMARK::ORIGINAL::L_KNEE * 1000
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=LKnee
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	;

	Evaluate_Expression
	/EXPRESSION=LANDMARK::ORIGINAL::R_KNEE * 1000
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=RKnee
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	;

	Evaluate_Expression
	/EXPRESSION=LANDMARK::ORIGINAL::L_ANKLE * 1000
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=LAnkle
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	;

	Evaluate_Expression
	/EXPRESSION=LANDMARK::ORIGINAL::R_ANKLE * 1000
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=RAnkle
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	;

	Evaluate_Expression
	/EXPRESSION=LANDMARK::ORIGINAL::Distal Thorax * 1000
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=Thorax
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	;

	Evaluate_Expression
	/EXPRESSION=LANDMARK::ORIGINAL::L_Shoulder * 1000
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=LShoulder
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	;

	Evaluate_Expression
	/EXPRESSION=LANDMARK::ORIGINAL::R_Shoulder * 1000
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=RShoulder
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	;

	Evaluate_Expression
	/EXPRESSION=LANDMARK::ORIGINAL::L_Elbow * 1000
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=LElbow
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	;

	Evaluate_Expression
	/EXPRESSION=LANDMARK::ORIGINAL::R_Elbow * 1000
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=RElbow
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	;

	Evaluate_Expression
	/EXPRESSION=LANDMARK::ORIGINAL::L_WRIST * 1000
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=LWrist
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	;

	Evaluate_Expression
	/EXPRESSION=LANDMARK::ORIGINAL::R_WRIST * 1000
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=RWrist
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	;

	Evaluate_Expression
	/EXPRESSION=LANDMARK::ORIGINAL::Head_mid * 1000
	/RESULT_TYPES=DERIVED
	/RESULT_FOLDERS=SEG_POS
	/RESULT_NAME=Head
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	;

	! Segment Rotations
	!---------------------------
	For_Each
	/ITERATION_PARAMETER_NAME=signal
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	/ITEMS=Pelvis_wrt_Lab+RThigh_wrt_Lab+RLeg_wrt_Lab+RFoot_wrt_Lab+LThigh_wrt_Lab+LLeg_wrt_Lab+LFoot_wrt_Lab+Thorax_wrt_Lab+RArm_wrt_Lab+LArm_wrt_Lab+Head_wrt_Lab+LForearm_wrt_Lab+LHand_wrt_Lab+RForearm_wrt_Lab+RHand_wrt_Lab
	;

		Evaluate_Expression
		/EXPRESSION=LINK_MODEL_BASED::ORIGINAL::&::signal
		/RESULT_TYPES=DERIVED
		/RESULT_FOLDERS=SEG_ROT
		/RESULT_NAME=&::signal
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		;

	End_For_Each
	/ITERATION_PARAMETER_NAME=signal
	;

	! Targets
	! WebGL 3d viewer requires data in [mm]
	Multiply_Signals_By_Constant
	/SIGNAL_TYPES=TARGET
	/SIGNAL_FOLDER=PROCESSED
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	/RESULT_TYPES=TARGET
	/RESULT_FOLDERS=UNITS_MM
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	/CONSTANT=1000
	;

	!heavily interpolated because gaps are set to zero by WebGL 3d
	Interpolate
	/SIGNAL_TYPES=TARGET
	/SIGNAL_FOLDER=UNITS_MM
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	/RESULT_FOLDER=UNITS_MM
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	/MAXIMUM_GAP=PARAMETERS::POINT::RATE / 5
	! /NUM_FIT=3
	! /POLYNOMIAL_ORDER=3
	;

	Set_Pipeline_Parameter_From_Expression
	/PARAMETER_NAME=norm_points
	/EXPRESSION=PARAMETERS::POINT::FRAMES
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	;

	<?
	if($includes_force) {
	?> 

		! Forces
		Set_Pipeline_Parameter_To_List_Of_Signal_Names
		/PARAMETER_NAME=fp_names
		/SIGNAL_TYPES=FORCE
		! /SIGNAL_FOLDER=ORIGINAL
		;

		Set_Pipeline_Parameter
		/PARAMETER_NAME=fp_numbers
		/PARAMETER_VALUE=::fp_names
		/PARAMETER_VALUE_SEARCH_FOR=FP
		/PARAMETER_VALUE_REPLACE_WITH=
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		! /MULTI_PASS=FALSE
		;

		! Extract FP coordinates
		Metric_From_C3D_Parameter
		/METRIC_NAME=C3D_CORNERS
		/PARAMETER_GROUP=FORCE_PLATFORM
		/PARAMETER_NAME=CORNERS
		;

		!add FP corners
		Set_Pipeline_Parameter
		/PARAMETER_NAME=corner_no
		/PARAMETER_VALUE=0
		;

		For_Each
		/ITERATION_PARAMETER_NAME=fp
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		/ITEMS=::fp_numbers
		;

			Evaluate_Expression
			/EXPRESSION=vector(METRIC::PROCESSED::C3D_CORNERS[&::corner_no& + 1],METRIC::PROCESSED::C3D_CORNERS[&::corner_no& + 2],METRIC::PROCESSED::C3D_CORNERS[&::corner_no& + 3])
			/RESULT_NAME=FP&::fp&_CORNER1
			/RESULT_TYPE=METRIC
			/RESULT_FOLDER=FORCE
			;

			Evaluate_Expression
			/EXPRESSION=vector(METRIC::PROCESSED::C3D_CORNERS[&::corner_no& + 4],METRIC::PROCESSED::C3D_CORNERS[&::corner_no& + 5],METRIC::PROCESSED::C3D_CORNERS[&::corner_no& + 6])
			/RESULT_NAME=FP&::fp&_CORNER2
			/RESULT_TYPE=METRIC
			/RESULT_FOLDER=FORCE
			;

			Evaluate_Expression
			/EXPRESSION=vector(METRIC::PROCESSED::C3D_CORNERS[&::corner_no& + 7],METRIC::PROCESSED::C3D_CORNERS[&::corner_no& + 8],METRIC::PROCESSED::C3D_CORNERS[&::corner_no& + 9])
			/RESULT_NAME=FP&::fp&_CORNER3
			/RESULT_TYPE=METRIC
			/RESULT_FOLDER=FORCE
			;

			! Evaluate_Expression
			! /EXPRESSION=vector(METRIC::PROCESSED::C3D_CORNERS[&::corner_no& + 10],METRIC::PROCESSED::C3D_CORNERS[&::corner_no& + 11],METRIC::PROCESSED::C3D_CORNERS[&::corner_no& + 12])
			! /RESULT_NAME=FP&::fp&_CORNER4
			! /RESULT_TYPE=METRIC
			! /RESULT_FOLDER=FORCE
			! ;

			Set_Pipeline_Parameter_From_Expression
			/PARAMETER_NAME=corner_no
			/EXPRESSION=&::corner_no& + 12
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			;
			
		End_For_Each
		/ITERATION_PARAMETER_NAME=fp
		;

		! store force, cop and free moment in components
		Transform_Data_Coordinate_System
		/SIGNAL_TYPES=COFP
		/SIGNAL_FOLDER=ORIGINAL
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		! /FROM_SEGMENT_CS=LAB
		/TO_SEGMENT_CS=LAB
		/RESULT_TYPES=DERIVED
		/RESULT_FOLDERS=FORCE
		/RESULT_NAME=_COP
		/APPLY_AS_SUFFIX_TO_SIGNAL_NAME=TRUE
		! /ORIENTATION_ONLY=FALSE
		! /USE_DATA_RATE=FALSE
		;

		! WebGL 3d viewer requires data in [mm]
		! Theia 2024.1 changed default units to [m]
		Conditional_Statement
		/ITERATION_PARAMETER_NAME=theia
		/EXPRESSION=("<?=$model_used;?>" = "Theia")
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		;

			Multiply_Signals_By_Constant
			/SIGNAL_TYPES=METRIC
			/SIGNAL_FOLDER=FORCE
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			/RESULT_TYPES=METRIC
			/RESULT_FOLDERS=FORCE
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			/CONSTANT=1000
			;

		Conditional_Statement_End
		/ITERATION_PARAMETER_NAME=theia
		;

		Multiply_Signals_By_Constant
		/SIGNAL_TYPES=DERIVED
		/SIGNAL_FOLDER=FORCE
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		/RESULT_TYPES=DERIVED
		/RESULT_FOLDERS=FORCE
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		/CONSTANT=1000
		;

		Transform_Data_Coordinate_System
		/SIGNAL_TYPES=FORCE
		/SIGNAL_FOLDER=ORIGINAL
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		/TO_SEGMENT_CS=LAB
		/RESULT_TYPES=DERIVED
		/RESULT_FOLDERS=FORCE
		/RESULT_NAME=_FORCE
		/APPLY_AS_SUFFIX_TO_SIGNAL_NAME=TRUE
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		;

		Transform_Data_Coordinate_System
		/SIGNAL_TYPES=FREEMOMENT
		/SIGNAL_FOLDER=ORIGINAL
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		/TO_SEGMENT_CS=LAB
		/RESULT_TYPES=DERIVED
		/RESULT_FOLDERS=FORCE
		/RESULT_NAME=_FREEMOMENT
		/APPLY_AS_SUFFIX_TO_SIGNAL_NAME=TRUE
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		;

		! !reset following parameters for each trial (Dummy is just a workaround as parameter can't be empty)
		Set_Pipeline_Parameter
		/PARAMETER_NAME=force_type
		/PARAMETER_VALUE=DUMMY
		;
		
		Set_Pipeline_Parameter
		/PARAMETER_NAME=force_folder
		/PARAMETER_VALUE=DUMMY
		;
		
		Set_Pipeline_Parameter
		/PARAMETER_NAME=force_sig_name
		/PARAMETER_VALUE=DUMMY
		;
		
		Set_Pipeline_Parameter
		/PARAMETER_NAME=force_norm_points
		/PARAMETER_VALUE=DUMMY
		;

		! Center of FP, based on http://www.c-motion.com/v3dwiki/index.php/Example_-_Intersection_of_two_lines
		For_Each
		/ITERATION_PARAMETER_NAME=fp
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		/ITEMS=::fp_numbers
		;

			!Prepare force variables for export
			Set_Pipeline_Parameter
			/PARAMETER_NAME=force_type
			/PARAMETER_VALUE=&::force_type& +METRIC+METRIC+METRIC+DERIVED+DERIVED+DERIVED
			;
			
			Set_Pipeline_Parameter
			/PARAMETER_NAME=force_folder
			/PARAMETER_VALUE=&::force_folder& +FORCE+FORCE+FORCE+FORCE+FORCE+FORCE
			;
			
			Set_Pipeline_Parameter
			/PARAMETER_NAME=force_sig_name
			/PARAMETER_VALUE=&::force_sig_name&+FP&::fp&_CORNER1+FP&::fp&_CORNER2+FP&::fp&_CORNER3+FP&::fp&_FORCE+FP&::fp&_FREEMOMENT+FP&::fp&_COP
			;
			
			Set_Pipeline_Parameter
			/PARAMETER_NAME=force_norm_points
			/PARAMETER_VALUE=&::force_norm_points& +1+1+1+&::norm_points&+&::norm_points&+&::norm_points&
			;
		
		End_For_Each
		/ITERATION_PARAMETER_NAME=fp
		;
	<?
	}?> 

	!set start and end frame (QTM 2.12.2552 or later is required)
	Evaluate_Expression
	/EXPRESSION=METRIC::PROCESSED::Cropped Measurement Start Frame / PARAMETERS::POINT::RATE
	/RESULT_TYPES=METRIC
	/RESULT_FOLDERS=PROCESSED
	/RESULT_NAME=startTime
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	;

	Evaluate_Expression
	/EXPRESSION=METRIC::PROCESSED::Cropped Measurement End Frame / PARAMETERS::POINT::RATE
	/RESULT_TYPES=METRIC
	/RESULT_FOLDERS=PROCESSED
	/RESULT_NAME=endTime
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	;

	Evaluate_Expression
	/EXPRESSION=METRIC::PROCESSED::Uncropped Measurement Length
	/RESULT_TYPES=METRIC
	/RESULT_FOLDERS=PROCESSED
	/RESULT_NAME=Uncropped Measurement Length
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	;

	Evaluate_Expression
	/EXPRESSION=PARAMETERS::POINT::RATE
	/RESULT_TYPES=METRIC
	/RESULT_FOLDERS=PROCESSED
	/RESULT_NAME=Frame Rate
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	;

	Set_Pipeline_Parameter_To_List_Of_Signal_Names
	/PARAMETER_NAME=marker_list_3dv
	/SIGNAL_TYPES=TARGET
	/SIGNAL_FOLDER=UNITS_MM
	;

	Set_Pipeline_Parameter
	/PARAMETER_NAME=filename
	/PARAMETER_VALUE=::file
	/PARAMETER_VALUE_SEARCH_FOR=<?=$working_directory;?> 
	/PARAMETER_VALUE_REPLACE_WITH=
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	;

	Set_Pipeline_Parameter
	/PARAMETER_NAME=filename
	/PARAMETER_VALUE=::filename
	/PARAMETER_VALUE_SEARCH_FOR=.c3d
	/PARAMETER_VALUE_REPLACE_WITH=
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	;

	Get_Pipeline_Parameter_Count
	/PARAMETER_NAME=count
	/PARAMETER_VALUE=::marker_list_3dv
	;

	Set_Pipeline_Parameter_From_For_Loop
	/PARAMETER_NAME=list
	/PARAMETER_INDEX_START=1
	/PARAMETER_INDEX_END=&::count& - 1
	/PARAMETER_INDEX_STEP=1
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	;

	Set_Pipeline_Parameter
	/PARAMETER_NAME=npoint
	/PARAMETER_VALUE=&::norm_points&
	;

	Set_Pipeline_Parameter
	/PARAMETER_NAME=sig_type_3dv
	/PARAMETER_VALUE=TARGET
	;

	Set_Pipeline_Parameter
	/PARAMETER_NAME=sig_folder_3dv
	/PARAMETER_VALUE=UNITS_MM
	;

	For_Each
	/ITERATION_PARAMETER_NAME=nn
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	/ITEMS=::list
	;

		Set_Pipeline_Parameter
		/PARAMETER_NAME=npoint
		/PARAMETER_VALUE=&::npoint&+&::norm_points&
		;

		Set_Pipeline_Parameter
		/PARAMETER_NAME=sig_type_3dv
		/PARAMETER_VALUE=&::sig_type_3dv&+TARGET
		;

		Set_Pipeline_Parameter
		/PARAMETER_NAME=sig_folder_3dv
		/PARAMETER_VALUE=&::sig_folder_3dv&+UNITS_MM
		;

	End_For_Each
	/ITERATION_PARAMETER_NAME=nn
	;

	Export_Data_To_Ascii_File
	/SIGNAL_TYPES=&::sig_type_3dv&+
		METRIC+METRIC+METRIC+METRIC+
		DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+
		DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+
		DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+
		METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+
		METRIC+METRIC+METRIC+METRIC+METRIC+
		<? if ($includes_force) echo '&::force_type&';?> 
	/SIGNAL_FOLDER=&::sig_folder_3dv&+
		PROCESSED+PROCESSED+PROCESSED+PROCESSED+
		SEG_ROT+SEG_ROT+SEG_ROT+SEG_ROT+SEG_ROT+SEG_ROT+SEG_ROT+SEG_ROT+SEG_ROT+SEG_ROT+
		SEG_ROT+SEG_ROT+SEG_ROT+SEG_ROT+SEG_ROT+SEG_POS+SEG_POS+SEG_POS+SEG_POS+SEG_POS+
		SEG_POS+SEG_POS+SEG_POS+SEG_POS+SEG_POS+SEG_POS+SEG_POS+SEG_POS+SEG_POS+SEG_POS+
		SEG_LENGTH+SEG_LENGTH+SEG_LENGTH+SEG_LENGTH+SEG_LENGTH+SEG_LENGTH+SEG_LENGTH+SEG_LENGTH+SEG_LENGTH+SEG_LENGTH+
		SEG_LENGTH+SEG_LENGTH+SEG_LENGTH+SEG_LENGTH+SEG_LENGTH+
		<? if($includes_force) echo '&::force_folder&';?> 
	/SIGNAL_NAMES=&::marker_list_3dv&+
		startTime+endTime+Uncropped Measurement Length+Frame Rate+
		Pelvis_wrt_Lab+RThigh_wrt_Lab+RLeg_wrt_Lab+RFoot_wrt_Lab+LThigh_wrt_Lab+LLeg_wrt_Lab+LFoot_wrt_Lab+Thorax_wrt_Lab+RArm_wrt_Lab+RForearm_wrt_Lab+
		RHand_wrt_Lab+LArm_wrt_Lab+LForearm_wrt_Lab+LHand_wrt_Lab+Head_wrt_Lab+Pelvis+RHip+RKnee+RAnkle+LHip+
		LKnee+LAnkle+Thorax+RShoulder+RElbow+RWrist+LShoulder+LElbow+LWrist+Head+
		Pelvis+RThigh+RLeg+RFoot+LThigh+LLeg+LFoot+Thorax+RArm+RForearm+
		RHand+LArm+LForearm+LHand+Head+
		<? if($includes_force) echo '&::force_sig_name&';?> 
	/FILE_NAME=<?=$working_directory;?>&::filename&-3d-data.xml
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	/COMPONENT_SEQUENCE=ALL
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	/NORMALIZE_DATA=TRUE
	/NORMALIZE_POINTS=&::npoint&+
		1+1+1+1+
		&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+
		&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+
		&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+&::norm_points&+
		1+1+1+1+1+1+1+1+1+1+
		1+1+1+1+1+
		<? if($includes_force) echo '&::force_norm_points&';?> 
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	/USE_XML_FORMAT=TRUE
	/USE_SHORT_FILENAME=TRUE
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	;

End_For_Each
/ITERATION_PARAMETER_NAME=file
;

Switch_to_Report_Mode
/SHOW_ANIMATION=TRUE
/PAGE_NUMBER=1
;

!====================================
!Save the CMO
!====================================

File_Save_As
/FILE_NAME=<?=$cmo_file;?> 
;
