Export_Data_To_Ascii_File
/FILE_NAME=<?=$working_directory;?>DATA_Angle.txt
/SIGNAL_TYPES=LINK_MODEL_BASED
! /SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=Right Hip Angles+Left Hip Angles+Right Knee Angles+Left Knee Angles+Right Ankle Angles+Left Ankle Angles
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/COMPONENT_SEQUENCE=X
/SIGNAL_PRECISION=3
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! /USE_POINT_RATE=FALSE
! /NORMALIZE_DATA=FALSE
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! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
/USE_SHORT_FILENAME=TRUE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
/EXPORT_NAN=TRUE
;

Export_Data_To_Ascii_File
/FILE_NAME=<?=$working_directory;?>DATA_Moment.txt
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Hip Moment+Left Hip Moment+Right Knee Moment+Left Knee Moment+Right Ankle Moment+Left Ankle Moment
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/COMPONENT_SEQUENCE=X
/SIGNAL_PRECISION=3
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/USE_SHORT_FILENAME=TRUE
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/EXPORT_NAN=TRUE
;

Export_Data_To_Ascii_File
/FILE_NAME=<?=$working_directory;?>DATA_Power.txt
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Hip Power+Left Hip Power+Right Knee Power+Left Knee Power+Right Ankle Power+Left Ankle Power
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/COMPONENT_SEQUENCE=X
/SIGNAL_PRECISION=3
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/USE_SHORT_FILENAME=TRUE
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/EXPORT_NAN=TRUE
;

Export_Data_To_Ascii_File
/FILE_NAME=<?=$working_directory;?>DATA_Angle_Velocity.txt
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=Right Hip Angle Velocity+Left Hip Angle Velocity+Right Knee Angle Velocity+Left Knee Angle Velocity+Right Ankle Angle Velocity+Left Ankle Angle Velocity
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/COMPONENT_SEQUENCE=X
/SIGNAL_PRECISION=3
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/USE_SHORT_FILENAME=TRUE
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/EXPORT_NAN=TRUE
;