!====================================================
! Add any custom processing steps below here
!====================================================


!Set the force threshold for the FP 
Set_Force_Platform_Threshold
/THRESHOLD=20 
! /SET_AS_DEFAULT=FALSE
;

Set_Use_Processed_Analog
/USE_PROCESSED=TRUE
;

Set_Use_Processed_Targets
/USE_PROCESSED=TRUE
;

Set_Use_Processed_Forces
/USE_PROCESSED=TRUE
;

Compute_Model_Based_Data
/RESULT_NAME=CenterOfMass
/SUBJECT_TAG=
/FUNCTION=MODEL_COG
/SEGMENT=
/REFERENCE_SEGMENT=
! /RESOLUTION_COORDINATE_SYSTEM=LAB
! /USE_CARDAN_SEQUENCE=FALSE
! /NORMALIZATION=FALSE
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! /NEGATEX=FALSE
! /NEGATEY=FALSE
! /NEGATEZ=FALSE
! /AXIS1=X
! /AXIS2=Y
! /AXIS3=Z
! /TREADMILL_DATA=FALSE
! /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
! /TREADMILL_SPEED=0.0
;

Compute_Model_Based_Data
/RESULT_NAME=PelvisCGPos
/SUBJECT_TAG=
/FUNCTION=SEG_CGPOSITION
/SEGMENT=RPV
! /REFERENCE_SEGMENT=LAB
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Pelvic Angles
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEY=TRUE
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/AXIS1=Z
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/AXIS3=X
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Pelvic Angles
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEZ=TRUE
/AXIS1=Z
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/AXIS3=X
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Hip Angles
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTH
/REFERENCE_SEGMENT=Virtual Pelvis
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Hip Angles
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=LTH
/REFERENCE_SEGMENT=Virtual Pelvis
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Knee Angles
/SUBJECT_TAG=
/FUNCTION=JOINT_ANGLE
/SEGMENT=RSK
/REFERENCE_SEGMENT=RTH
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION_METHOD=TRUE
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/NEGATEX=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Knee Angles
/SUBJECT_TAG=
/FUNCTION=JOINT_ANGLE
/SEGMENT=LSK
/REFERENCE_SEGMENT=LTH
/RESOLUTION_COORDINATE_SYSTEM=
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/NORMALIZATION_METHOD=TRUE
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Ankle Angles
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=Virtual RFoot
/REFERENCE_SEGMENT=RSK
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Ankle Angles
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=Virtual LFoot
/REFERENCE_SEGMENT=LSK
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Hip Moment
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_MOMENT
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Hip Moment
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_MOMENT
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Knee Moment
/SUBJECT_TAG=
/FUNCTION=JOINT_MOMENT
/SEGMENT=RSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTH
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Knee Moment
/SUBJECT_TAG=
/FUNCTION=JOINT_MOMENT
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Ankle Moment
/SUBJECT_TAG=
/FUNCTION=JOINT_MOMENT
/SEGMENT=RFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Ankle Moment
/SUBJECT_TAG=
/FUNCTION=JOINT_MOMENT
/SEGMENT=LFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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/NEGATEX=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Hip Power
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_POWER
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Hip Power
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_POWER
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Knee Power
/SUBJECT_TAG=
/FUNCTION=JOINT_POWER
/SEGMENT=RSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTH
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Knee Power
/SUBJECT_TAG=
/FUNCTION=JOINT_POWER
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Ankle Power
/SUBJECT_TAG=
/FUNCTION=JOINT_POWER
/SEGMENT=RFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Ankle Power
/SUBJECT_TAG=
/FUNCTION=JOINT_POWER
/SEGMENT=LFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Hip Angle Velocity
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RTH
/REFERENCE_SEGMENT=RPV
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/USE_CARDAN_SEQUENCE=TRUE
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Hip Angle Velocity
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
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/USE_CARDAN_SEQUENCE=TRUE
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Knee Angle Velocity
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RSK
/REFERENCE_SEGMENT=RTH
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/USE_CARDAN_SEQUENCE=TRUE
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Knee Angle Velocity
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LSK
/REFERENCE_SEGMENT=LTH
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/USE_CARDAN_SEQUENCE=TRUE
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/NEGATEX=TRUE
/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Ankle Angle Velocity
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_VELOCITY
/SEGMENT=RFT
/REFERENCE_SEGMENT=RSK
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/USE_CARDAN_SEQUENCE=TRUE
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Ankle Angle Velocity
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_VELOCITY
/SEGMENT=LFT
/REFERENCE_SEGMENT=LSK
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/USE_CARDAN_SEQUENCE=TRUE
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/NEGATEY=TRUE
/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Foot Progression
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=LFT Virtual
/REFERENCE_SEGMENT=Virtual Lab
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEZ=TRUE
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Foot Progression
/SUBJECT_TAG=
/FUNCTION=JOINT_ANGLE
/SEGMENT=Right Foot Normalized
/REFERENCE_SEGMENT=Virtual Lab
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=L_COP
/SUBJECT_TAG=
/FUNCTION=COP_PATH
/SEGMENT=LFT
/REFERENCE_SEGMENT=
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;

Compute_Model_Based_Data
/RESULT_NAME=R_COP
/SUBJECT_TAG=
/FUNCTION=COP_PATH
/SEGMENT=RFT
/REFERENCE_SEGMENT=
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;

Compute_Model_Based_Data
/RESULT_NAME=L_COP_rt_LFT
/SUBJECT_TAG=
/FUNCTION=COP_PATH
/SEGMENT=LFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LFT
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;

Compute_Model_Based_Data
/RESULT_NAME=R_COP_rt_RFT
/SUBJECT_TAG=
/FUNCTION=COP_PATH
/SEGMENT=RFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RFT
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;

Compute_Model_Based_Data
/RESULT_NAME=l_foot_CG_rt_LAB
/SUBJECT_TAG=
/FUNCTION=SEG_CGPOSITION
/SEGMENT=LFT
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;

Compute_Model_Based_Data
/RESULT_NAME=l_foot_CG_rt_LFT
/SUBJECT_TAG=
/FUNCTION=SEG_CGPOSITION
/SEGMENT=LFT
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/RESOLUTION_COORDINATE_SYSTEM=LFT
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;

Compute_Model_Based_Data
/RESULT_NAME=r_foot_CG_rt_LAB
/SUBJECT_TAG=
/FUNCTION=SEG_CGPOSITION
/SEGMENT=RFT
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;

Compute_Model_Based_Data
/RESULT_NAME=r_foot_CG_rt_RFT
/SUBJECT_TAG=
/FUNCTION=SEG_CGPOSITION
/SEGMENT=RFT
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/RESOLUTION_COORDINATE_SYSTEM=RFT
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;

Compute_Model_Based_Data
/RESULT_NAME=Left Foot Pitch Angles
/SUBJECT_TAG=
/FUNCTION=JOINT_ANGLE
/SEGMENT=Left Foot Normalized
/REFERENCE_SEGMENT=Virtual Lab
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=Right Foot Pitch Angles
/SUBJECT_TAG=
/FUNCTION=JOINT_ANGLE
/SEGMENT=Right Foot Normalized
/REFERENCE_SEGMENT=Virtual Lab
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=Pelvis_wrt_Lab
/SUBJECT_TAG=
/FUNCTION=JOINT_ANGLE
/SEGMENT=RPV
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/RESOLUTION_COORDINATE_SYSTEM=
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/TREADMILL_DIRECTION=UNIT_VECTOR(0, 1, 0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RThigh_SegAngle_wrt_Lab
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTH
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/RESOLUTION_COORDINATE_SYSTEM=
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/TREADMILL_DIRECTION=UNIT_VECTOR(0, 1, 0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LThigh_SegAngle_wrt_Lab
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=LTH
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/RESOLUTION_COORDINATE_SYSTEM=
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/TREADMILL_DIRECTION=UNIT_VECTOR(0, 1, 0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RShank_SegAngle_wrt_Lab
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=RSK
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/RESOLUTION_COORDINATE_SYSTEM=
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/TREADMILL_DIRECTION=UNIT_VECTOR(0, 1, 0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LShank_SegAngle_wrt_Lab
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=LSK
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/RESOLUTION_COORDINATE_SYSTEM=
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/TREADMILL_DIRECTION=UNIT_VECTOR(0, 1, 0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LFoot_SegAngle_wrt_Lab
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=Virtual LFoot
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/RESOLUTION_COORDINATE_SYSTEM=
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/TREADMILL_DIRECTION=UNIT_VECTOR(0, 1, 0)
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;

Compute_Model_Based_Data
/RESULT_NAME=RFoot_SegAngle_wrt_Lab
/SUBJECT_TAG=ALL_SUBJECTS
/FUNCTION=JOINT_ANGLE
/SEGMENT=Virtual RFoot
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/RESOLUTION_COORDINATE_SYSTEM=
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/TREADMILL_DIRECTION=UNIT_VECTOR(0, 1, 0)
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;

Compute_Model_Based_Data
/RESULT_NAME=LAnkleAnglesStaticOnly
/SUBJECT_TAG=
/FUNCTION=JOINT_ANGLE
/SEGMENT=LFT
/REFERENCE_SEGMENT=LFOOT_1
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=RAnkleAnglesStaticOnly
/SUBJECT_TAG=
/FUNCTION=JOINT_ANGLE
/SEGMENT=RFT
/REFERENCE_SEGMENT=RFOOT_1
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=PelvisPos
/SUBJECT_TAG=
/FUNCTION=SEG_CGPOSITION
/SEGMENT=RPV
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;

